PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = seq_teaching_exp
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Routines
  Routine Training_1
    TextComponent train1_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Training phase 1
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  Routine Performance_1
    TextComponent perf1_txt1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Performance phase 1
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    ImageComponent perf1_ex1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn1
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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    ImageComponent perf1_ex2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn2
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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    ImageComponent perf1_ex3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn3
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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    ImageComponent perf1_ex4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn4
      bold = True
      forceEndRoutine = False
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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    ImageComponent perf1_ex5
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent perf1_btn5
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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  Routine Briefing
    TextComponent gen_info
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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      text:
        Some initial general information:

        TBC
    ButtonComponent brf_btn
      bold = True
      borderColor = black
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.2,0.1]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
      text = Next
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  Routine Raven_Matrices
    TextComponent rv_txt1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 600.0
      text = Pre-training phase
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    ButtonComponent rv_btn1
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 600.0
      text = Next
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  Routine Debriefing
    TextComponent debrf_info
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Thank you for participating in this experiment.

        We would like to know some information about you.

        All records will be kept strictly confidental (privacy statement TBC).

        Please click the relevant option for you concerning your background.
    ButtonComponent debrf_btn
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Finish
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  Routine Instructions_1
    TextComponent instr1_txt1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
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      text:
        Some instructions for the performance questions
    ImageComponent instr1_ex1
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 07.png
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent instr1_btn1
      bold = True
      fillColor = black
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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    ImageComponent instr1_ex2
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 09.png
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent instr1_btn2
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = False
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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    ImageComponent instr1_ex3
      image = materials/demo_imgs/[SINGLE - SIMPLE] example 16.png
      size = [1,0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300.0
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    ButtonComponent instr1_btn3
      bold = True
      color = black
      fillColor = white
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = [0.2,0.1]
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 300.0
      text = Next
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Flow
  Routine Briefing
  Routine Raven_Matrices
  Routine Instructions_1
  Routine Training_1
  Routine Performance_1
  Routine Debriefing
